###
#@BQB_IS_VERSION_OF:['http://identifiers.org/reactome/REACT_309', 'http://identifiers.org/go/GO:0043516']
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000188', 'http://identifiers.org/biomodels.db/MODEL5836973167']
#@BQB_OCCURS_IN:['http://identifiers.org/taxonomy/9606']
#@BQB_IS_PART_OF:['http://identifiers.org/reactome/REACT_85', 'http://identifiers.org/kegg.pathway/hsa04115']
#@creatorName:'Proctor Carole'
#@creatorEmail:'c.j.proctor@ncl.ac.uk'
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/18706112']
#@notes:'This is a plain translation of an SBML model created on 05/03/2016. The original model has 20 molecules and 20 reactions. The translated model has 20 molecules and 20 rules'
###
begin model
begin parameters
	ksynMdm2 0.000495
	kdegMdm2 0.000433
	ksynp53 0.006
	kdegp53 0.000825
	kbinMdm2p53 0.001155
	krelMdm2p53 1.155e-05
	ksynMdm2mRNA 0.0001
	kdegMdm2mRNA 0.0001
	kactATM 0.0001
	kdegATMMdm2 0.0004
	kinactATM 0.0005
	kphosp53 0.0005
	kdephosp53 0.5
	kphosMdm2 2.0
	kdephosMdm2 0.5
	kdam 0.08
	krepair 2e-05
	kproteff 1.0
	ksynp53mRNA 0.001
	kdegp53mRNA 0.0001
	IR 0
end parameters
begin compartments
	cell  3  1.0
end compartments
begin molecule types
	Mdm2()
	p53()
	Mdm2_p53()
	Mdm2_mRNA()
	p53_mRNA()
	ATMA()
	ATMI()
	p53_P()
	Mdm2_P()
	damDNA()
end molecule types
begin seed species
	Mdm2() 5.0 #Mdm2 #Mdm2
	p53() 5.0 #p53 #p53
	Mdm2_p53() 95.0 #Mdm2_p53 #Mdm2_p53
	Mdm2_mRNA() 10.0 #Mdm2_mRNA #Mdm2_mRNA
	p53_mRNA() 10.0 #p53_mRNA #p53_mRNA
	ATMI() 200.0 #ATMI #ATMI
end seed species
begin observables
	Species Mdm2 Mdm2() #Mdm2
	Species p53 p53() #p53
	Species Mdm2_p53 Mdm2_p53() #Mdm2_p53
	Species Mdm2_mRNA Mdm2_mRNA() #Mdm2_mRNA
	Species p53_mRNA p53_mRNA() #p53_mRNA
	Species ATMA ATMA() #ATMA
	Species ATMI ATMI() #ATMI
	Species p53_P p53_P() #p53_P
	Species Mdm2_P Mdm2_P() #Mdm2_P
	Species damDNA damDNA() #damDNA
end observables
begin functions
	functionRate6() = kdegMdm2 * kproteff
	functionRate8() = kdegp53 * kproteff
	functionRate11() = kdam * IR
end functions
begin reaction rules
	p53mRNASynthesis: 0 -> p53_mRNA() ksynp53mRNA
	p53mRNADegradation: p53_mRNA() -> 0 kdegp53mRNA
	Mdm2Synthesis: Mdm2_mRNA() -> Mdm2_mRNA() + Mdm2()  ksynMdm2
	Mdm2mRNASynthesis1: p53() -> p53() + Mdm2_mRNA() ksynMdm2mRNA
	Mdm2mRNASynthesis2: p53_P() -> p53_P() + Mdm2_mRNA()  ksynMdm2mRNA
	Mdm2mRNADegradation: Mdm2_mRNA() -> 0  kdegMdm2mRNA
	Mdm2Degradation: Mdm2() -> 0  functionRate6()
	p53Synthesis: p53_mRNA() -> p53() + p53_mRNA()  ksynp53
	p53Degradation: Mdm2_p53() -> Mdm2()  functionRate8()
	P53_Mdm2Binding: p53() + Mdm2() -> Mdm2_p53() kbinMdm2p53
	P53_Mdm2Release: Mdm2_p53() -> p53() + Mdm2() krelMdm2p53
	DNAdamage: 0  -> damDNA() functionRate11()
	DNArepair: damDNA() -> 0 krepair
	ATMactivation: damDNA() + ATMI() -> damDNA() + ATMA() kactATM
	p53phoshorylation: p53() + ATMA() -> p53_P() + ATMA() kphosp53
	p53dephosorylation: p53_P() -> p53() kdephosp53
	Mdm2phoshorylation: Mdm2() + ATMA() -> Mdm2_P() + ATMA() kphosMdm2
	Mdm2dephosorylation: Mdm2_P() -> Mdm2() kdephosMdm2
	Mdm2Pdegradation: Mdm2_P() -> 0  kdegATMMdm2
	ATMInactivation: ATMA() -> ATMI() kinactATM
end reaction rules
end model
